---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Medical Image Search"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking yes
set psychopy_screen 0
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:\\Users\\nelso\\Documents\\GitHub\\contextlab_medicalimageperception_experiments\\february_2023"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background black

define inline_script Params
	set description "Executes Python code"
	set _run ""
	___prepare__
	import time
	import json
	
	# debug params
	var.debug_image = 'i.png'
	var.debug = 1
	
	# timing params
	var.timeout_trial_ms = 2000
	var.timeout_listener_ms = 3
	
	# experience params
	var.done_key = 'c'
	
	print("===============================================")
	print(f"Timeout per trial (seconds): {var.timeout_trial_ms}")
	print(f"Timeout for polling keyboard/mouse listener: {var.timeout_listener_ms}")
	print(f"Debug Mode (1 = Yes): {var.debug}")
	print(f"Debug Image: {var.debug_image}")
	__end__

define notepad README
	__note__
	OVERVIEW
	Params in the sidebar has all parameters for this experiment.experiment
	`collect_clicks.py` Inline Script has logic for capturing mouse clicks
	
	DECISIONS:
	Fixation: for X ms, or keypress?
	What is appropriate level for listener ms?
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script collect_clicks
	set description "Executes Python code"
	___run__
	start_time = self.time()
	while elapsed_time < var.timeout_trial_ms:
	    print(f"elapsed_time: {elapsed_time}")
	    # draw image
	    (x,y), time = my_mouse.get_pos()
	    my_canvas.clear()
	    my_canvas.image(path)
	    my_canvas.fixdot(x, y)
	    my_canvas.show()
	
	    # poll keyboard and mouse
	    if key == None:
	        key, key_end_time = my_keyboard.get_key()
	        print(f"key: {key}")
	    if click == None:
	        click, position, click_end_time = my_mouse.get_click()
	        click_event = {"click": click, "position": position, "click_end_time": click_end_time}
	        if click is not None:
	            trial_clicks.append(click_event)
	    
	    # calculate elapsed time
	    elapsed_time = self.time() - start_time
	
	# save mouse clicks
	var.set("user_clicks", json.dumps(trial_clicks))
	
	# prepare mouse for next trial
	my_mouse.flush()
	__end__
	___prepare__
	
	
	# initialize listeners for mouse and keyboard
	my_mouse = Mouse(timeout=var.timeout_listener_ms)
	my_canvas = Canvas()
	my_keyboard = Keyboard(keylist=[u'c'], timeout=var.timeout_listener_ms)
	
	# init timers and containers for data collection
	trial_clicks = []
	elapsed_time = 0
	key = None
	click = None
	#if my_mouse.flush() == False:
	#    click = None
	
	# Determine the absolute path:
	# TODO: load filename from trial table
	path = exp.pool[var.debug_image]
	print(path)
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run README always
	run Params always
	run instruction_prepractice always
	run practice_table always
	run instruction_postpractice always
	run instruction_closing always

define sketchpad fixation
	set duration keypress
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define sketchpad instruction_closing
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="The experiment has finished. <br /><br />Thank you for your participation. <br /><br />Press any key to exit" x=0 y=0 z_index=0

define sketchpad instruction_postpractice
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="The experimental trials are about to begin!  <br /><br />Please press the space bar to continue. " x=0 y=0 z_index=0

define feedback instruction_prepractice
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="In this task, you will be searching for <br />up to two masses per image.  <br /><br />Please click on the location(s) <br />you believe a mass to be.<br /><br />Once you are finished searching, please press the <br />spacebar to terminate the search.  <br /><br />If no mass is present press the spacebar to <br />terminate your search (no clicks are needed). <br /><br />While it may appear that images repeat themself, <br />no two images are the same. <br /><br />These images are computer generated images, <br />so they may look highly similar.  <br /><br />Press any key to continue" x=0 y=0 z_index=0

define logger log_data
	set description "Logs experimental data"
	set auto_log yes

define loop practice_table
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 filename "mass_2.png"
	setcycle 0 type mass
	setcycle 0 lesion_count 2
	setcycle 1 filename "no-mass-0.png"
	setcycle 1 type "no-mass"
	setcycle 1 lesion_count 0
	setcycle 2 filename "mass-1.png"
	setcycle 2 type mass
	setcycle 2 lesion_count 1
	run trial_seq

define sequence trial_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run fixation always
	run collect_clicks always
	run log_data always

